PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'ndhwb_id': '', 'eeg_record': "['yes', 'no']", 'experimenter': '', 'show_control_monitor': "['yes', 'no']"}
  Full-screen window = True
  Monitor = BenQ
  Screen = 1
  Units = degFlat
  Window size (pixels) = [2560, 1440]
  color = $[0.0,0.0,0.0]
  expName = sof_task
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_timing_params
      Code Type = Py
      Begin Routine:
        # Randomly select a trial jitter
        shuffle(jitters_list)
        this_jitter = round(jitters_list[0])

        # Add to the trialHandler object
        if phase == 'prac':
            prac.addData(u'jitter', this_jitter)
            trial_type = trial_types[prac.thisN]
            prac.addData(u'trial_type', trial_type)
        else:
            trials.addData(u'jitter', this_jitter)
            trial_type = trial_types[trials.thisN]
            trials.addData(u'trial_type', trial_type)


        ## Determine if normal or italic text
        #if nogo_condition == 'normal':
        #    if trial_type == 'go':
        #        trial_word.italic = True
        #     else:
        #        trial_word.italic = False
        #else:
        #    if trial_type == 'go':
        #        trial_word.italic = False
        #     else:
        #        trial_word.italic = True
      Each Frame:
        # Determine if normal or italic text
        if frameN == 0:
            if nogo_condition == 'normal':
                if trial_type == 'go':
                    trial_word.italic = True
                 else:
                    trial_word.italic = False
            else:
                if trial_type == 'go':
                    trial_word.italic = False
                 else:
                    trial_word.italic = True
    CodeComponent send_eeg_trigger
      Code Type = Py
      Begin Routine:
        # Reset the trigger
        if eeg_record:
            eeg_trig_box.write(reset_bit)

        # At start of the trial, indicate I have not snt a trigger
        stim_trigger_sent = False
        stim_trigger_frame = 0

        # Determine trigger value
        this_marker_code = stim_marker[trial_type][category]
      Each Frame:
        # Send trigger if needed
        if eeg_record:
            if stim_image.status == STARTED:
                if not stim_trigger_sent:
                    win.callOnFlip(eeg_trig_box.write, this_marker_code)
                    stim_trigger_sent = True
                    stim_trigger_frame = frameN

            # Reset the trigger at the next flip
            if stim_trigger_sent and frameN == stim_trigger_frame + 10: # Do this 10 frames later
                win.callOnFlip(eeg_trig_box.write, reset_bit)
    PolygonComponent photosensor_dot
      durationEstim = 1.5
      fillColor = $[1,1,1]
      nVertices = 180
      pos = (-24.0, 0.0)
      shape = regular polygon...
      size = (0.75,0.75)
      startEstim = .1
      startVal [frame N] = $trial_start_isi_duration
      stopVal [duration (frames)] = $word_duration
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    TextComponent trial_word
      durationEstim = 1.5
      letterHeight = 1.5
      startEstim = .1
      startVal [frame N] = $trial_start_isi_duration
      stopVal [duration (frames)] = $word_duration
      text [set during: trial.trial_ISI] = $word
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    KeyboardComponent response
      allowedKeys = 'f', 'j'
      durationEstim = 2.4
      forceEndRoutine = False
      startEstim = .1
      startVal [frame N] = $trial_start_isi_duration 
      stopVal [duration (frames)] = $trial_dur_frames + word_duration + this_jitter
      store = first key
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    ImageComponent trial_fixation
      durationEstim = .9
      size = (0.5, 0.5)
      startEstim = 1.6
      startVal [frame N] = $trial_start_isi_duration + word_duration
      stopVal [duration (frames)] = $this_jitter
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    CodeComponent send_resp_trigger_and_code
      Code Type = Py
      Begin Routine:
        # State I have not sent a response trigger yet, and initialize response.keys
        resp_trigger_sent = False
        resp_marker = []
        resp_marker_frame = 0

        # Response markers are outlined in the config routine.
      Each Frame:
        resp_marker = {
            'correct': [56],
            'incorrect': [57]
        }

        # Send response trigger
        if eeg_record:
            if len(response.keys) == 1:

                # Code the response
                this_key = response.keys
                this_rt  = response.rt
                if trial_type == 'go':
                    is_resp_cor = 1
                    resp_type = 'correct'
                else:
                    is_resp_cor = 1
                    resp_type = 'incorrect'

                # Send the marker
                if not resp_trigger_sent and resp_marker:
                    # Make call to send trigger
                    win.callOnFlip(eeg_trig_box.write, resp_marker[resp_type])
                    resp_trigger_sent = True
                    resp_marker_frame = frameN

            # Reset the trigger at the next flip
            if resp_trigger_sent and frameN == resp_marker_frame + 1:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
      End Routine:
        # Log and store data
        if response.keys in ['', [], None]: # Update things I need to
            this_key = 'n/a'
            this_rt = -99

        # Add data to trialHandler
        trials.addData(u'resp',this_key)
        trials.addData(u'rt',this_rt)
        trials.addData(u'correct',is_resp_cor)
    StaticComponent trial_ISI
      durationEstim = .1
      startVal [frame N] = 0
      stopVal [duration (frames)] = $trial_start_isi_duration 
      syncScreenRefresh = True
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  Routine delay
    CodeComponent delay_control_monitor
      Code Type = Py
      Begin Routine:
        if draw_delay:
            continueRoutine = True
        else:
            continueRoutine = False

        if eeg_record:
            control_text.setText('Task')
            control_text.draw()
            win2.flip()
    TextComponent delay_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1.0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $20/frameDur
      text = +
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  Routine instructions
    CodeComponent instructions_control_monitor
      Code Type = Py
      Begin Routine:
        if show_control:
            control_text.setText('Instructions')
            control_text.draw()
            win2.flip()
    TextComponent instructions_text
      letterHeight = 1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      wrapWidth = 220
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      text [set every repeat]:
        INSTRUCTIONS
    KeyboardComponent instruction_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine save_trials
    CodeComponent print_frame_drops
      Code Type = Py
      Begin Routine:
        #print('Overall, %i frames were dropped.' % win.nDroppedFrames)
        #win.recordFrameIntervals = False
    CodeComponent save_trial_handler
      Code Type = Py
      Begin Routine:
        # Make the save file name (This should have accurate id as it is reading from it)
        save_file = os.path.join(save_dir, f"sub-{expInfo['id']}_task-emonogo_run-{word_blocks.thisN+1:02}_beh"

        # Save it many different ways
        trials.saveAsWideText(save_file + '.tsv')
        trials.saveAsWideText(save_file + '.csv')
        trials.saveAsPickle(save_file)
    TextComponent final_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (s)] = $20/frameDur
      text = +
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  Routine task_complete
    CodeComponent task_complete_control_monitor
      Code Type = Py
      Begin Routine:
        if eeg_record:
            control_text.setText('TASK COMPLETE')
            control_text.draw()
            win2.flip()
    CodeComponent save_experiment_handler
      Code Type = Py
      Begin Routine:
        # Resave experiment handler just in case
        # This is copied from code generated by PsychoPy Builder
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
    TextComponent task_complete_text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = This task is now complete.
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  Routine task_break
    CodeComponent task_break_code
      Code Type = Py
      Begin Experiment:
        # Define number of trials between rests
        task_break_n = 162
      Begin Routine:
        if trials.thisN == 0:
            continueRoutine = False
            draw_delay = True
        elif trials.thisN % task_break_n != 0:
            continueRoutine = False
            draw_delay = False
        else:
            continueRoutine = True
            draw_delay = True

        if eeg_record and continueRoutine:
            control_text.setText('Break')
            control_text.draw()
            win2.flip()
    TextComponent break_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Take a break
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    KeyboardComponent break_ready
      allowedKeys = [' ','space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine config
    CodeComponent configure_options
      Code Type = Py
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      Begin Experiment:
        ## FRAM RATE OPTIMIZATION OPTIONS
        processPriority = 'realtime' # Can be 'normal', 'high', 'realtime'
        disableGC = True # disable garbage collection

        ## TIMING OPTIONS
        # Timing Variables (all are in seconds)
        # These are converted to frames in the Begin Routine tab (changed in place)
        word_duration = 1.5 # Length the word is on the screen
        trial_start_isi_duration = .1 # Static ISI time. Subtracted from min_jitter and max_jitter to make the list
        delay_duration = 20.0 # Time padding beginning and end of a trial segment.
        jitter_spacing = frameDur # Intervals between jitter possibilities, same as frameDur
        min_jitter = 0.75 # Minimum jitter duration
        max_jitter = 1.25 # Maximum jitter duration

        ## EEG SETUP TRIGGER OPTIONS
        eeg_com = 'COM5' # Can check the Device Manager in windows to figure this out (COM Ports).
        reset_bit = [0] # Don't change this unless you know what you are doing

        # Stimulus markers
        # The codes sent for trial has two digits.
        # First digit codes fortrial type (1=go, 2=nogo)
        # Second digit is emotion category (1=neutral, 2=negative, 3=positive)
        # The Markers are in a dictionary
        stim_marker = {
            'go': dict(neutral=[11], negative=[12], positive=[13]),
            'nogo': dict(neutral=[21], negative=[22], positive=[23])
        }

        # Response markers
        # This is the code for whether a response is given.
        # The codes are 56 for correct go response and
        # 57 for incorrecr response to a nogo trial
        resp_marker = {
            'correct': [56],
            'incorrect': [57]
        }
      Begin Routine:
        # Note that frameDur is the duration of a single frame estimated
        # by psychopy. If it fails to detect in (e.g., frameRate == Null),
        # this typically defaults to 60.0 Hz. Note that this timing scheme
        # allows for reproducibility across systems (monitors, computers, etc.)

        # The following should not be changed.

        # Critical timing pieces
        word_duration = round(word_duration / frameDur)
        trial_start_isi_duration = round(trial_start_isi_duration / frameDur)
        delay_duration = round(delay_duration / frameDur)

        # Make jitters list
        jitters = np.arange(min_jitter-trial_start_isi_duration, max_jitter + frameDur - trial_start_isi_duration, frameDur) / frameDur
  Routine setup
    CodeComponent frame_rate_optimization
      Code Type = Py
      Begin Experiment:
        # Import garbage collection module
        import gc

        # Handle Priority stuff
        if processPriority == 'normal':
            pass
        elif processPriority == 'high':
            core.rush(True)
        elif processPriority == 'realtime':
            # Only makes a diff compared to 'high' on Windows.
            core.rush(True, realtime=True)
        else:
            raise Exception('Invalid process priority:', processPriority, "Process running at normal.")

        # Handle Garbage Collection
        if disableGC:
            gc.disable()
    CodeComponent info_gui_code
      Code Type = Py
      Begin Experiment:
        # Define eeg_record
        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['eeg_record'] == 'yes':
            eeg_record = True
        else:
            eeg_record = False

        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['show_control_monitor'] == 'yes':
            show_control = True
        else:
            show_control = False

        # Check if frameRate can be determined, if not, exit out
        frameRate = expInfo['frameRate']
        if frameRate == None:
            print('frame rate not established. Try Again.')
            win.close()
            core.quit()

        # Verify everything
        dlg = gui.DlgFromDict(dictionary=expInfo, title='Is this information correct?')
        if dlg.OK == False:
            win.close()
            core.quit()  # user pressed cancel
    CodeComponent control_monitor_code
      Code Type = Py
      Begin Experiment:
        # Record frame intervals
        win.recordFrameIntervals = False

        # Setup window 2 only if asked too
        if show_control:

            win2 = visual.Window(
                size=[1920,1080], fullscr=True, screen=1,
                allowGUI=False, allowStencil=False,
                color=[-1.0,-1.0,-1.0], colorSpace='rgb',
                blendMode='avg', useFBO=True,
                units='degFlat')

            control_text = visual.TextStim(win=win2,
                text='default text',
                font='Helvetica',
                pos=(0, 0), height=1.5, wrapWidth=200, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                depth=-1.0);
      End Experiment:
        # Close the control room monitor
        if show_control:
            win2.close()
    CodeComponent data_save_setup
      Code Type = Py
      Begin Experiment:
        # Setup save directorya
        save_dir = os.path.join('data', 'sub-{}'.format(expInfo['id']))
        if not os.path.isdir(save_dir):
            os.makedirs(save_dir)
    CodeComponent eeg_trigger_setup
      Code Type = Py
      Begin Experiment:
        if eeg_record:

            # Import library
            import serial

            # Setup box
            eeg_trig_box = serial.Serial(eeg_com)
            eeg_trig_box.write(reset_bit)
      End Experiment:
        # Return bits to low state, then close connection
        if eeg_record:
            eeg_trig_box.write(reset_bit)
            eeg_trig_box.close()
  Routine make_crit_trials
    CodeComponent make_crit_trials_code
      Code Type = Py
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      Begin Routine:
        # Phase
        phase = 'crit'

        # Make trial types
        trial_types = ['go'] * 23 + ['nogo']*9

        # Shuffle the blocks
        shuffle(trial_types)

        # Create stim file name
        stimulus_file = f"{word_cat}_words.csv"
  Routine make_prac_trials
    CodeComponent make_prac_trials_code
      Code Type = Py
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      Begin Routine:
        # Phase
        phase = 'prac'

        # Make trial types
        trial_types = ['go'] * 23 + ['nogo']*9

        # Shuffle the blocks
        shuffle(trial_types)
Flow
  Routine config
  Routine setup
  LoopInitiator nogo_blocks loopType="TrialHandler"
    conditionsFile = nogo_blocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nogo_condition', 'normal')]),
      OrderedDict([('nogo_condition', 'reversed')])]
    Routine make_prac_trials
    Routine instructions
    Routine delay
    LoopInitiator prac loopType="TrialHandler"
      conditionsFile = prac_words.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('word', 'Nickel'), ('category', 'prac')]),
        OrderedDict([('word', 'Wool'), ('category', 'prac')]),
        OrderedDict([('word', 'Necklace'), ('category', 'prac')]),
        OrderedDict([('word', 'Napkin'), ('category', 'prac')]),
        OrderedDict([('word', 'Glacier'), ('category', 'prac')]),
        OrderedDict([('word', 'Hood'), ('category', 'prac')]),
        OrderedDict([('word', 'Knuckle'), ('category', 'prac')]),
        OrderedDict([('word', 'Starch'), ('category', 'prac')]),
        OrderedDict([('word', 'Feast'), ('category', 'prac')]),
        OrderedDict([('word', 'Collar'), ('category', 'prac')]),
        OrderedDict([('word', 'Spark'), ('category', 'prac')]),
        OrderedDict([('word', 'Capsule'), ('category', 'prac')]),
        OrderedDict([('word', 'Surf'), ('category', 'prac')]),
        OrderedDict([('word', 'Sodium'), ('category', 'prac')]),
        OrderedDict([('word', 'Lemon'), ('category', 'prac')]),
        OrderedDict([('word', 'Latch'), ('category', 'prac')]),
        OrderedDict([('word', 'Dough'), ('category', 'prac')]),
        OrderedDict([('word', 'Quarter'), ('category', 'prac')]),
        OrderedDict([('word', 'Mountain'), ('category', 'prac')]),
        OrderedDict([('word', 'Biscuit'), ('category', 'prac')])]
      Routine trial
    LoopTerminator prac
    Routine delay
    LoopInitiator word_blocks loopType="TrialHandler"
      conditionsFile = word_blocks.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('word_cat', 'negative')]),
        OrderedDict([('word_cat', 'neutral')]),
        OrderedDict([('word_cat', 'positive')]),
        OrderedDict([('word_cat', 'negative')]),
        OrderedDict([('word_cat', 'neutral')]),
        OrderedDict([('word_cat', 'positive')]),
        OrderedDict([('word_cat', 'negative')]),
        OrderedDict([('word_cat', 'neutral')]),
        OrderedDict([('word_cat', 'positive')])]
      Routine make_crit_trials
      Routine instructions
      Routine delay
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $stimulus_file
        loopType = random
        nReps = 1
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        Routine trial
      LoopTerminator trials
      Routine save_trials
    LoopTerminator word_blocks
  LoopTerminator nogo_blocks
  Routine task_complete
